CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "C1")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C3")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C4")
    Name to assign these images:YapTaz
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GrayToColor:[module_num:5|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Nuclei
    Select the image to be colored green:Actin
    Select the image to be colored blue:Tubulin
    Name the output image:ColorImage_RGB
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:2
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
RescaleIntensity:[module_num:6|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
    Select the input image:ColorImage_RGB
    Name the output image:ColorImage
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,1.0
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
RescaleIntensity:[module_num:7|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
    Select the input image:Nuclei
    Name the output image:Nuclei_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:Actin
    Name the output image:Actin_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RunCellpose:[module_num:9|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
    Select the input image:Actin_Rescaled
    Expected object diameter:60
    Detection mode:cyto2
    Name the output object:Cytoplasm_Seg
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
    Select the nuclei image:Nuclei_Rescaled
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.5
    Cell probability threshold:0
    GPU memory share for each worker:0.2
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Use Omnipose for mask reconstruction:1.0
    Invert images:No
    Remove objects that are touching the edge?:Yes

RunCellpose:[module_num:10|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
    Select the input image:Nuclei_Rescaled
    Expected object diameter:30
    Detection mode:nuclei
    Name the output object:Nuclei_Seg
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
    Select the nuclei image:Nuclei_Rescaled
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.8
    Cell probability threshold:0
    GPU memory share for each worker:0.2
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:-1
    Use Omnipose for mask reconstruction:1.0
    Invert images:No
    Remove objects that are touching the edge?:No

FilterObjects:[module_num:11|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
    Select the objects to filter:Cytoplasm_Seg
    Name the output objects:Cytoplasm_Seg_Filtered
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select additional object to relabel:Cytoplasm_Seg
    Name the relabeled objects:FilteredGreen
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
RelateObjects:[module_num:12|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
    Parent objects:Cytoplasm_Seg
    Child objects:Nuclei_Seg
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nuclei_Seg_Relate
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:ColorOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Nuclei_Seg_Relate
    Select outline color:light grey
    Select objects to display:Cytoplasm_Seg_Filtered

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:YapTaz
    Select objects to measure:Cytoplasm_Seg_Filtered, Nuclei_Seg_Relate

CalculateMath:[module_num:15|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
    Name the output measurement:YapTazRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei_Seg_Relate
    Select the numerator measurement:Intensity_IntegratedIntensity_YapTaz
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm_Seg_Filtered
    Select the denominator measurement:Intensity_IntegratedIntensity_YapTaz
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:Yes
    Enter the lower bound:0.0
    Constrain the result to an upper bound?:Yes
    Enter the upper bound:1.0

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm_Seg_Filtered
    Measurement to display:Math_YapTazRatio
    Select the image on which to display the measurements:ColorImage
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    Name the output image that has the measurements displayed:YapTazRatio
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    Image elements to save:Image
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    Display mode:Color
    Color map:viridis
    Display background image?:Yes
    Color map scale:Use this image's measurement range
    Color map range:0.0,1.0
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
MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:Cytoplasm_Seg_Filtered, Nuclei_Seg_Relate
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:Cytoplasm_Seg_Filtered
    Name the output image:Cytoplasm_Segmentation
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:19|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
    Select the input objects:Nuclei_Seg_Relate
    Name the output image:Nuclei_Segmentation
    Select the color format:uint16
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Segmentation
    Select method for constructing file names:Single name
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    Enter single file name:NucLabel
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    Saved file format:tiff
    Output file location:Default Output Folder|H:\\Data\\@MiN\\Sarah\\Projects\\TiM2023\\Cellprofiler_Project\\Results\\ImageResults
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm_Segmentation
    Select method for constructing file names:Single name
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    Enter single file name:CytoLabel
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    Saved file format:tiff
    Output file location:Default Output Folder|H:\\Data\\@MiN\\Sarah\\Projects\\TiM2023\\Cellprofiler_Project\\Results\\ImageResults
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:ColorOverlay
    Select method for constructing file names:Single name
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    Enter single file name:Overlay
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    Saved file format:png
    Output file location:Default Output Folder|H:\\Data\\@MiN\\Sarah\\Projects\\TiM2023\\Cellprofiler_Project\\Results\\ImageResults
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:YapTazRatio
    Select method for constructing file names:Single name
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    Enter single file name:Ratio
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    Saved file format:png
    Output file location:Default Output Folder|H:\\Data\\@MiN\\Sarah\\Projects\\TiM2023\\Cellprofiler_Project\\Results\\ImageResults
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|CellProfiler_Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei_Seg_Relate|AreaShape_EulerNumber,Nuclei_Seg_Relate|AreaShape_BoundingBoxMaximum_Y,Nuclei_Seg_Relate|AreaShape_BoundingBoxMaximum_X,Nuclei_Seg_Relate|AreaShape_FormFactor,Nuclei_Seg_Relate|AreaShape_Perimeter,Nuclei_Seg_Relate|AreaShape_MajorAxisLength,Nuclei_Seg_Relate|AreaShape_MeanRadius,Nuclei_Seg_Relate|AreaShape_MinorAxisLength,Nuclei_Seg_Relate|AreaShape_MaximumRadius,Nuclei_Seg_Relate|AreaShape_Eccentricity,Nuclei_Seg_Relate|AreaShape_Center_Y,Nuclei_Seg_Relate|AreaShape_Center_X,Nuclei_Seg_Relate|AreaShape_MinFeretDiameter,Nuclei_Seg_Relate|AreaShape_Solidity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:{image_id}_
    Overwrite existing files without warning?:Yes
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